PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = FunctionalLocalizer
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine setup_experiment
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    CodeComponent set_up
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        # For key counterbalancing (example: '1' for match, '2' for mismatch)
        # This could be determined by participant number (expInfo['participant'])

        match_key = '1'
        mismatch_key = '2'

        allowed_keys_list = [match_key, mismatch_key]

        # Store these for later use in routines
        expInfo['match_key'] = match_key
        expInfo['mismatch_key'] = mismatch_key
        expInfo['allowed_keys_list'] = allowed_keys_list
    TextComponent instr_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You will see an image, then a blank screen, then a word. Press '1' if the word matches the image, and '2' if it does not. Press any space to start.
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    KeyboardComponent instr_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_msg
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    TextComponent block_msg_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $f"Starting Block {blocks_loop.thisN + 1} of {blocks_loop.nReps}. Press space to continue."
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    KeyboardComponent key_resp_block_msg
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine inside_loop
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  Routine feedback_routine
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    TextComponent feedback_text_display
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $feedback_message
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    CodeComponent feedback_code
      Code Type = Auto->JS
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      Begin Routine:
        #skip feedback if right answer
        if not show_feedback_flag:
            continueRoutine = False
  Routine iti_routine
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    TextComponent iti_fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti_duration
      text [set every repeat] = +
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text =  "The experiment is now complete. Thank you for your participation!"
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixation_2
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent trial_code
      Code Type = Auto->JS
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      Begin Routine:
        word_display_duration = 1.0
        total_response_time_allowed = 2.0
  Routine trials_image
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    ImageComponent stim_image
      image [set every repeat] = $image_file
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine trials_word
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    TextComponent stim_word
      letterHeight = 0.05
      startVal [time (s)] =  0
      stopVal [duration (s)] = $word_display_duration
      text [set every repeat] = $presented_word
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  Routine trials_resp
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  Routine blank
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    TextComponent blank_interval
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $time_of_blank
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        import random
        randomizer = random.randint(0, 10)

        time_of_blank = 1.0 + (randomizer/10)
  Routine response
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = $allowed_keys_list
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = $total_response_time_allowed
      storeCorrect = True
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    CodeComponent timer
      Code Type = Auto->JS
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      Each Frame:
        t = routineTimer.getTime()
        if t > key_resp.tStart + total_response_time_allowed and not key_resp.keys:
            key_resp.corr = 0
            thisExp.addData('timeout', 1)
            continueRoutine = False
    CodeComponent save_data
      Code Type = Auto->JS
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      End Routine:
        # Store data
        thisExp.addData('image_presented', image_file)
        thisExp.addData('word_presented', presented_word)
        thisExp.addData('is_match_condition', is_match) # from conditions file
        thisExp.addData('correct_answer_expected', corrAns)
        if key_resp.keys:
            thisExp.addData('response_given', key_resp.keys[0])
            thisExp.addData('response_correct', key_resp.corr)
            thisExp.addData('response_rt', key_resp.rt)
        else: # Timeout
            thisExp.addData('response_given', None)
            thisExp.addData('response_correct', 0) # Mark as incorrect or a specific timeout code
            thisExp.addData('response_rt', None)

        # Determine feedback message
        feedback_message = ""
        show_feedback_flag = False

        if not key_resp.keys: # Timeout
            feedback_message = "Response timeout. Please answer promptly."
            show_feedback_flag = True
        elif not key_resp.corr: # Incorrect response
            feedback_message = "Incorrect" # Or the specific feedback from paper
            show_feedback_flag = True
        # else: correct response, no feedback_message, show_feedback_flag remains False

        # To be used in the feedback routine
        thisExp.addData('feedback_message_to_show', feedback_message)
        thisExp.addData('show_feedback_flag_value', show_feedback_flag)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $total_response_time_allowed
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      text [set every repeat]:
        Press 1 or 2
Flow
  Routine setup_experiment
  LoopInitiator blocks_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 1
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    Routine block_msg
    LoopInitiator inside_loop_trials loopType="TrialHandler"
      Selected rows = $f"{blocks_loop.thisN * 72}:{ (blocks_loop.thisN + 1) * 72 }"
      conditionsFile = localizer_conditions.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'image_file': 'stimuli/banana.png', 'presented_word': 'banana', 'is_match': 'match', 'corrAns': 1, 'blank_duration': 1.25, 'iti_duration': 2.3},
        {'image_file': 'stimuli/scissor.png', 'presented_word': 'scissor', 'is_match': 'match', 'corrAns': 1, 'blank_duration': 1.17, 'iti_duration': 2.79},
        {'image_file': 'stimuli/zebra.png', 'presented_word': 'zebra', 'is_match': 'match', 'corrAns': 1, 'blank_duration': 1.5, 'iti_duration': 2.59},
        {'image_file': 'stimuli/scissor.png', 'presented_word': 'scissor', 'is_match': 'match', 'corrAns': 1, 'blank_duration': 1.79, 'iti_duration': 1.95},
        {'image_file': 'stimuli/face.png', 'presented_word': 'face', 'is_match': 'match', 'corrAns': 1, 'blank_duration': 1.51, 'iti_duration': 1.91},
        {'image_file': 'stimuli/face.png', 'presented_word': 'zebra', 'is_match': 'mismatch', 'corrAns': 2, 'blank_duration': 1.39, 'iti_duration': 1.82},
        {'image_file': 'stimuli/banana.png', 'presented_word': 'face', 'is_match': 'mismatch', 'corrAns': 2, 'blank_duration': 1.53, 'iti_duration': 2.61},
        {'image_file': 'stimuli/zebra.png', 'presented_word': 'face', 'is_match': 'mismatch', 'corrAns': 2, 'blank_duration': 1.86, 'iti_duration': 1.33},
        {'image_file': 'stimuli/face.png', 'presented_word': 'scissor', 'is_match': 'mismatch', 'corrAns': 2, 'blank_duration': 1.6, 'iti_duration': 2.46},
        {'image_file': 'stimuli/face.png', 'presented_word': 'face', 'is_match': 'match', 'corrAns': 1, 'blank_duration': 1.55, 'iti_duration': 1.98}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
      Routine fixation_2
      Routine trials_image
      Routine trials_word
      Routine blank
      Routine response
      Routine feedback_routine
      Routine iti_routine
    LoopTerminator inside_loop_trials
  LoopTerminator blocks_loop
  Routine end
